<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="harp:FileDevice">
            <harp:FileName>ChestSteady.bin</harp:FileName>
            <harp:IgnoreErrors>false</harp:IgnoreErrors>
            <harp:PlaybackRate>1</harp:PlaybackRate>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>34</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedU16</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Butterworth">
          <dsp:SampleRate>1000</dsp:SampleRate>
          <dsp:Cutoff1>2</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:FilterOrder>3</dsp:FilterOrder>
          <dsp:FilterType>HighPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>MessageBytes</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:MatrixWriter">
            <dsp:Path>ArmsWalking.bin</dsp:Path>
            <dsp:Suffix>FileCount</dsp:Suffix>
            <dsp:Overwrite>false</dsp:Overwrite>
            <dsp:Layout>ColumnMajor</dsp:Layout>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="6" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>